PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Priming_Exp
  keyboardBackend = ioHub
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Routines
  Routine word
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words': 'table'},
      {'words': 'bottle'},
      {'words': 'laptop'},
      {'words': 'earrings'},
      {'words': 'shoes'},
      {'words': 'camera'},
      {'words': 'key'},
      {'words': 'pillow'},
      {'words': 'chair'},
      {'words': 'apple'},
      {'words': 'brick'},
      {'words': 'brush'},
      {'words': 'tiger'},
      {'words': 'spoon'},
      {'words': 'belt'}]
    Routine word
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'l_o_', 'corrAns': 'lion', 'priming': 0},
      {'test_words': 'pa_e_', 'corrAns': 'paper', 'priming': 0},
      {'test_words': '_ab_e', 'corrAns': 'table', 'priming': 1},
      {'test_words': 'c_oc_l_t_', 'corrAns': 'chocolate', 'priming': 0},
      {'test_words': 'l_p_o_', 'corrAns': 'laptop', 'priming': 1},
      {'test_words': 'sh__s', 'corrAns': 'shoes', 'priming': 1},
      {'test_words': '_en_i_', 'corrAns': 'pencil', 'priming': 0},
      {'test_words': 'e_r_i_g_', 'corrAns': 'earrings', 'priming': 1},
      {'test_words': '_ak_', 'corrAns': 'lake', 'priming': 0},
      {'test_words': '_ot_el', 'corrAns': 'bottle', 'priming': 1},
      {'test_words': 'h_m__r', 'corrAns': 'hammer', 'priming': 0},
      {'test_words': '_ey', 'corrAns': 'key', 'priming': 1},
      {'test_words': 't_ee', 'corrAns': 'tree', 'priming': 0},
      {'test_words': '_oa_', 'corrAns': 'soap', 'priming': 0},
      {'test_words': 'br_c_', 'corrAns': 'brick', 'priming': 1},
      {'test_words': 's_oo_', 'corrAns': 'spoon', 'priming': 1},
      {'test_words': 'b_n__a', 'corrAns': 'banana', 'priming': 0},
      {'test_words': '_e_t', 'corrAns': 'belt', 'priming': 1},
      {'test_words': '_gg_', 'corrAns': 'eggs', 'priming': 0},
      {'test_words': '__mb', 'corrAns': 'comb', 'priming': 0},
      {'test_words': 'p_l_ow', 'corrAns': 'pillow', 'priming': 1},
      {'test_words': 'ch_i_', 'corrAns': 'chair', 'priming': 1},
      {'test_words': '_ou_e', 'corrAns': 'house', 'priming': 0},
      {'test_words': 't_g_r', 'corrAns': 'tiger', 'priming': 1},
      {'test_words': 'co_t', 'corrAns': 'coat', 'priming': 0},
      {'test_words': 'b_us_', 'corrAns': 'brush', 'priming': 1}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
    Routine test
  LoopTerminator trials_2
